PsychoPy2experiment version="2022.2.4"
Settings
  Experiment info = {'participant': ''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  color = -1.0000, -1.0000, -1.0000
  expName = reading_mn
  keyboardBackend = ioHub
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Routines
  Routine words2_trials
    CodeComponent code
      Code Type = Auto->JS
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      Begin Experiment:
        count = 0

        correct = [1, 1, 1, 1]
      Begin Routine:
        count = count + 1

        if sum(correct[-4:]) == 0:
            continueRoutine = False
            trials_2.finished = True
      End Routine:
        if words2_resp.keys == 'right':
            correct.append(1)
        else:
            correct.append(0)



        print(correct)
        print(sum(correct[-4:]))
    TextComponent words2_screen
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text [set every repeat] = $words2
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    KeyboardComponent words2_resp
      allowedKeys = 'left','right'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine words3_trials
    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Routine:
        count = count + 1

        if sum(correct[-4:]) == 0:
            continueRoutine = False
            trials_3.finished = True
      End Routine:
        if words3_resp.keys == 'right':
            correct.append(1)
        else:
            correct.append(0)



        print(correct)
        print(sum(correct[-4:]))
    TextComponent words3_screen
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text [set every repeat] = $words3
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    KeyboardComponent words3_resp
      allowedKeys = 'left','right'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine words4_trials
    CodeComponent code_3
      Code Type = Auto->JS
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      Begin Routine:
        count = count + 1

        if sum(correct[-4:]) == 0:
            continueRoutine = False
            trials_4.finished = True
      End Routine:
        if words4_resp.keys == 'right':
            correct.append(1)
        else:
            correct.append(0)








        print(correct)
        print(sum(correct[-4:]))
    TextComponent words4_screen
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text [set every repeat] = $words4
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    KeyboardComponent words4_resp
      allowedKeys = 'left','right'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine words5_trials
    CodeComponent code_4
      Code Type = Auto->JS
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      Begin Routine:
        count = count + 1

        if sum(correct[-4:]) == 0:
            continueRoutine = False
            trials_5.finished = True
      End Routine:
        if words5_resp.keys == 'right':
            correct.append(1)
        else:
            correct.append(0)



        print(correct)
        print(sum(correct[-4:]))
    TextComponent words5_screen
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text [set every repeat] = $words5
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    KeyboardComponent words5_resp
      allowedKeys = 'left','right'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Welcome
    TextComponent welcome_text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        Velkommen til

        Læseopgaven

        Tryk på mellemrumstasten.
    KeyboardComponent key_resp
      allowedKeys = 'enter','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Finished
    TextComponent finished_text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        Godt klaret!

        Opgaven er afsluttet.
    KeyboardComponent key_resp_2
      allowedKeys = 'enter','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine Welcome
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = words.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'words2': 'nu', 'words3': 'mus', 'words4': 'male', 'words5': 'tomat'},
      {'words2': 'må', 'words3': 'nål', 'words4': 'nyse', 'words5': 'kanin'},
      {'words2': 'en', 'words3': 'lim', 'words4': 'time', 'words5': 'bamse '},
      {'words2': 'om', 'words3': 'lyn', 'words4': 'kano', 'words5': 'banan'}]
    Routine words2_trials
  LoopTerminator trials_2
  LoopInitiator trials_3 loopType="TrialHandler"
    conditionsFile = words.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'words2': 'nu', 'words3': 'mus', 'words4': 'male', 'words5': 'tomat'},
      {'words2': 'må', 'words3': 'nål', 'words4': 'nyse', 'words5': 'kanin'},
      {'words2': 'en', 'words3': 'lim', 'words4': 'time', 'words5': 'bamse '},
      {'words2': 'om', 'words3': 'lyn', 'words4': 'kano', 'words5': 'banan'}]
    Routine words3_trials
  LoopTerminator trials_3
  LoopInitiator trials_4 loopType="TrialHandler"
    conditionsFile = words.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'words2': 'nu', 'words3': 'mus', 'words4': 'male', 'words5': 'tomat'},
      {'words2': 'må', 'words3': 'nål', 'words4': 'nyse', 'words5': 'kanin'},
      {'words2': 'en', 'words3': 'lim', 'words4': 'time', 'words5': 'bamse '},
      {'words2': 'om', 'words3': 'lyn', 'words4': 'kano', 'words5': 'banan'}]
    Routine words4_trials
  LoopTerminator trials_4
  LoopInitiator trials_5 loopType="TrialHandler"
    conditionsFile = words.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'words2': 'nu', 'words3': 'mus', 'words4': 'male', 'words5': 'tomat'},
      {'words2': 'må', 'words3': 'nål', 'words4': 'nyse', 'words5': 'kanin'},
      {'words2': 'en', 'words3': 'lim', 'words4': 'time', 'words5': 'bamse '},
      {'words2': 'om', 'words3': 'lyn', 'words4': 'kano', 'words5': 'banan'}]
    Routine words5_trials
  LoopTerminator trials_5
  Routine Finished
